PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001', 'useDevices': 'False'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = test
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Routines
  Routine Setup
    ButtonComponent button_4
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      startVal [time (s)] = 0
      text = Start the study
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import pandas as pd
        df_stimuli = pd.DataFrame([], columns=["startTime", "endTime", "Stimuli"])
        df_answer = pd.DataFrame([], columns=["task", "answer"])
        df_hash = pd.DataFrame([], columns=["hash", "task"])

        participant = expInfo["participant"]
        session = expInfo["session"]
        use_devices = expInfo["useDevices"]

        folder_name = f"./data/Session_{session}_Participant_{participant}"

        from operator import imod
        import os
        if not os.path.exists(folder_name):
            os.makedirs(folder_name)
        eeg_logger = None
        eyetracking_logger = None
        from datetime import datetime
        start_time = None

        if use_devices==True:
            from EEGTools.Recorders.LiveAmpRecorder.liveamp_recorder import LiveAmpRecorder as Recorder
            from EyetrackerUtils.base_functionalities.logger import Logger as EyeTrackerLogger

            # setup eeg
            eeg_logger = Recorder()
            eeg_logger.connect()
            # setup eye tracking
            eyetracking_logger = EyeTrackerLogger(f"{folder_name}/EyeTracking.csv")
            eyetracking_logger.add_key_to_log('left_gaze_point_validity')
            eyetracking_logger.add_key_to_log('left_gaze_point_on_display_area')
            eyetracking_logger.add_key_to_log('left_pupil_diameter')
            eyetracking_logger.add_key_to_log('right_gaze_point_validity')
            eyetracking_logger.add_key_to_log('right_gaze_point_on_display_area')
            eyetracking_logger.add_key_to_log('right_pupil_diameter')
            eyetracking_logger.add_key_to_log('system_time_stamp')
            # start eeg
            eeg_logger.start_recording()
            # start eyetracking
            eyetracking_logger.start_recording()

        # setup timing
        start_time = datetime.now()
      End Experiment:
        if use_devices:
            eeg_logger.refresh()
            eeg_logger.disconnect()
            eeg_logger.save("EEG_raw", f"./data/Session_{session}_Participant_{participant}/")
            eyetracking_logger.stop_recording()

        df_stimuli.to_csv(f"{folder_name}/Stimuli_Times.csv")
        df_answer.to_csv(f"{folder_name}/Task_Answers.csv")
        df_hash.to_csv(f"{folder_name}/Hashs.csv")
  Routine Question
    ImageComponent Question_Image
      image [set every repeat] = $QuestionImage
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Time_Shown
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    KeyboardComponent Question_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Time_Shown-20
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    TextComponent Question_text
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Time_Shown-20
      text = Press space to go to answers
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    CodeComponent Question_Code
      Code Type = Py
      Begin Routine:
        current_time = datetime.now()
        start_of_stimuli = current_time- start_time

        if use_devices==True:
            eeg_logger.refresh()
            eeg_logger.set_event(hash(str(QuestionImage))%1000000007)
            df_hash.loc[len(df_hash)] = [hash(str(QuestionImage))%1000000007, QuestionImage]
        thisExp.addData("ImagePath",QuestionImage)
      End Routine:
        current_time = datetime.now()
        end_of_stimuli = current_time- start_time

        df_stimuli.loc[len(df_stimuli)] = [start_of_stimuli, end_of_stimuli, Baselinequestion_name]
        if  Break_key1.keys is not None and len(Break_key1.keys)>0:
            if Break_key1.keys[0] == '0':
                Trials.finished=True
    KeyboardComponent Break_key1
      allowedKeys = '0'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Time_Shown
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  Routine Answers
    ImageComponent Answers1Image
      image [set every repeat] = $AnswerImage
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Answer_Time
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    KeyboardComponent key_resp_4
      allowedKeys = 'a','s','d','f','space'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = $Answer_Time
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        current_time = datetime.now()
        start_of_stimuli = current_time- start_time
        if use_devices==True:
            eeg_logger.refresh()
            eeg_logger.set_event(hash(str(AnswerImage))%1000000007)
            df_hash.loc[len(df_hash)] = [hash(str(AnswerImage))%1000000007, AnswerImage]
        thisExp.addData("ImagePath",AnswerImage)
      End Routine:
        current_time = datetime.now()
        end_of_stimuli = current_time- start_time

        df_stimuli.loc[len(df_stimuli)] = [start_of_stimuli, end_of_stimuli, Baselineanswer_name]
        if  key_resp_4.keys is not None:
            answer = key_resp_4.keys[0]
            if answer == 's' and len(key_resp_4.keys)>1:
                answer = 'k'
            df_answer.loc[len(df_answer)] = [Baseline_name, answer]
        if  Break_key2.keys is not None and len(Break_key2.keys)>0:
            if Break_key2.keys[0] == '0':
                Trials.finished=True
    TextComponent text_14
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Answer_Time
      text = Press space to skip
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    KeyboardComponent Break_key2
      allowedKeys = '0'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Answer_Time
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  Routine Pause
    KeyboardComponent key_resp_16
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent Break_key3
      allowedKeys = '0'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        if use_devices==True:
            eeg_logger.refresh()
            eeg_logger.set_event(hash(str("Pause"))%1000000007)
            df_hash.loc[len(df_hash)] = [hash(str("Pause"))%1000000007, "Pause"]
        thisExp.addData("ImagePath","Pause")
      End Routine:
        if  Break_key3.keys is not None and len(Break_key3.keys)>0:
            if Break_key3.keys[0] == '0':
                Trials.finished=True
    ImageComponent image_8
      image = material\Rest_noskip.png
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Pause_2
    KeyboardComponent key_resp_17
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Pause_length/2
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    KeyboardComponent Break_key7
      allowedKeys = '0'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Pause_length/2
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        if use_devices==True:
            eeg_logger.refresh()
            eeg_logger.set_event(hash(str("Pause_2"))%1000000007)
            df_hash.loc[len(df_hash)] = [hash(str("Pause_2"))%1000000007, "Pause_2"]
        thisExp.addData("ImagePath","Pause_2")
      End Routine:
        if  Break_key7.keys is not None and len(Break_key7.keys)>0:
            if Break_key7.keys[0] == '0':
                Trials.finished=True
    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      volume [set every repeat] = Pause_Volume
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    ImageComponent image_12
      image [set every repeat] = $Pause_image
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Pause_length/2
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  Routine ThankYou
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Thanks for your participation
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    KeyboardComponent key_resp_6
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine MathTest
    ImageComponent image_10
      image = material\Math\MathTestQuestion.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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    TextComponent text_10
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press space to go to answers
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    CodeComponent Test_Math
      Code Type = Py
      Begin Routine:
        current_time = datetime.now()
        start_of_stimuli = current_time- start_time
      End Routine:
        current_time = datetime.now()
        end_of_stimuli = current_time- start_time

        df_stimuli.loc[len(df_stimuli)] = [start_of_stimuli, end_of_stimuli, "Math_training_Question"]
  Routine MathTestAnswer
    ImageComponent image_11
      image = material\Math\MathTrainingAnswers.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_12
      allowedKeys = 'a','s','d','f','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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    CodeComponent Test_Math_A
      Code Type = Py
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      Begin Routine:
        current_time = datetime.now()
        start_of_stimuli = current_time- start_time
      End Routine:
        current_time = datetime.now()
        end_of_stimuli = current_time- start_time

        df_stimuli.loc[len(df_stimuli)] = [start_of_stimuli, end_of_stimuli, "Math_training_answer"]
        if  key_resp_12.keys is not None:
            answer = key_resp_12.keys[0]
            if answer == 's' and len(key_resp_12.keys)>1:
                answer = 'k'
            df_answer.loc[len(df_answer)] = ["Math_training", answer]
  Routine start
    TextComponent text_15
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press space to start training exercises
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    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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  Routine Matrix_training
    ImageComponent Question_Image_2
      image [set every repeat] = $QuestionImage
      size [set every repeat] = (Q_W, Q_H)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Time_Shown
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    KeyboardComponent Question_keyboard_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Time_Shown
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    TextComponent Question_text_2
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Time_Shown
      text = Press space to go to answers
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    CodeComponent Question_Code_2
      Code Type = Py
      Begin Routine:
        current_time = datetime.now()
        start_of_stimuli = current_time- start_time
      End Routine:
        current_time = datetime.now()
        end_of_stimuli = current_time- start_time

        df_stimuli.loc[len(df_stimuli)] = [start_of_stimuli, end_of_stimuli, Baselinequestion_name]
        if  Break_key1.keys is not None and len(Break_key1.keys)>0:
            if Break_key1.keys[0] == '0':
                Trials.finished=True
    KeyboardComponent Break_key1_2
      allowedKeys = '0'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Time_Shown
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  Routine Pause2_2
    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = $Pause_length/2
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    KeyboardComponent key_resp_20
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Pause_length/2
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    KeyboardComponent Break_key7_2
      allowedKeys = '0'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Pause_length/2
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        if use_devices==True:
            eeg_logger.refresh()
            eeg_logger.set_event(hash(str("Pause2_2"))%1000000007)
            df_hash.loc[len(df_hash)] = [hash(str("Pause2_2"))%1000000007, "Pause2_2"]
        thisExp.addData("ImagePath","Pause2_2")
      End Routine:
        if  Break_key7.keys is not None and len(Break_key7.keys)>0:
            if Break_key7.keys[0] == '0':
                Trials.finished=True
    ImageComponent image_13
      image [set every repeat] = $Pause_Image2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Pause_length/2
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  Routine Pause2
    TextComponent text_13
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Pause_length
      text [set every repeat] = $str(Pause_length) + " seconds pause, to skip press space after half the time"
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    KeyboardComponent key_resp_21
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = $Pause_length/2
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    KeyboardComponent key_resp_22
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Pause_length
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    KeyboardComponent Break_key7_3
      allowedKeys = '0'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Pause_length
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    CodeComponent code_6
      Code Type = Py
      End Routine:
        if  Break_key7.keys is not None and len(Break_key7.keys)>0:
            if Break_key7.keys[0] == '0':
                Trials.finished=True
    SoundComponent sound_3
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      volume = Pause_Volume
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  Routine Pause1_2
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp_23
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent Break_key3_2
      allowedKeys = '0'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        if use_devices==True:
            eeg_logger.refresh()
            eeg_logger.set_event(hash(str("Pause1_2"))%1000000007)
            df_hash.loc[len(df_hash)] = [hash(str("Pause1_2"))%1000000007, "Pause1_2"]
        thisExp.addData("ImagePath","Pause1_2")
      End Routine:
        if  Break_key3.keys is not None and len(Break_key3.keys)>0:
            if Break_key3.keys[0] == '0':
                Trials.finished=True
    ImageComponent image_9
      image = material\Rest_skip.png
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine start_2
    TextComponent text_17
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press space to start experiment tasks
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    KeyboardComponent key_resp_24
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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  Routine Continue
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Next_time
      text = Press space to continue
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    SoundComponent sound_2
      sound = C
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Next_time/1000
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = $Next_time
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  Routine ReadTest
    ImageComponent image
      image = material\Read\sunQuestion.png
      startVal [time (s)] = 0.0
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    KeyboardComponent read_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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    TextComponent text_7
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press space to go to answers
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    CodeComponent Test_Q_Code
      Code Type = Py
      Begin Routine:
        current_time = datetime.now()
        start_of_stimuli = current_time- start_time
      End Routine:
        current_time = datetime.now()
        end_of_stimuli = current_time- start_time

        df_stimuli.loc[len(df_stimuli)] = [start_of_stimuli, end_of_stimuli, "Text_training_Question"]
  Routine ReadTestAnswer
    ImageComponent read_test_answer_1
      image = material\Read\sunAnswers.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'a','s','d','f','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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    CodeComponent Test_Q_A_Code
      Code Type = Py
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      Begin Routine:
        current_time = datetime.now()
        start_of_stimuli = current_time- start_time
      End Routine:
        current_time = datetime.now()
        end_of_stimuli = current_time- start_time

        df_stimuli.loc[len(df_stimuli)] = [start_of_stimuli, end_of_stimuli, "Read_training_answer"]
        if  key_resp_8.keys is not None:
            answer = key_resp_8.keys[0]
            if answer == 's' and len(key_resp_8.keys)>1:
                answer = 'k'
            df_answer.loc[len(df_answer)] = ["Read_training", answer]
  Routine ProbSolvTest
    ImageComponent image_5
      image = material\ProbSolv\quest18.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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    TextComponent text_8
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press Space to go to answers
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    CodeComponent Test_ProbSolv_Code
      Code Type = Py
      Begin Routine:
        current_time = datetime.now()
        start_of_stimuli = current_time- start_time
      End Routine:
        current_time = datetime.now()
        end_of_stimuli = current_time- start_time

        df_stimuli.loc[len(df_stimuli)] = [start_of_stimuli, end_of_stimuli, "Matrix_training_Question"]
  Routine ProbSolvTestAnswers
    ImageComponent image_6
      image = material\ProbSolv\_M0Answer.png
      size = (1, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_10
      allowedKeys = 'a','s','d','f','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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    CodeComponent Test_ProbSolv_A
      Code Type = Py
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      Begin Routine:
        current_time = datetime.now()
        start_of_stimuli = current_time- start_time
      End Routine:
        current_time = datetime.now()
        end_of_stimuli = current_time- start_time

        df_stimuli.loc[len(df_stimuli)] = [start_of_stimuli, end_of_stimuli, "ProbSolv_training_answer"]
        if  key_resp_10.keys is not None:
            answer = key_resp_10.keys[0]
            if answer == 's' and len(key_resp_10.keys)>1:
                answer = 'k'
            df_answer.loc[len(df_answer)] = ["ProbSolv_training", answer]
  Routine ProgComprTest
    ImageComponent image_15
      image = material\ProgCompr\Snippets\SampleForTraining.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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    TextComponent text_11
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press Space to go to Inputs
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    CodeComponent Test_ProgCompr
      Code Type = Py
      Begin Routine:
        current_time = datetime.now()
        start_of_stimuli = current_time- start_time
      End Routine:
        current_time = datetime.now()
        end_of_stimuli = current_time- start_time

        df_stimuli.loc[len(df_stimuli)] = [start_of_stimuli, end_of_stimuli, "ProgCompr_training_Question"]
  Routine ProgComprTestInput
    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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    TextComponent text_12
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press space to go to answers
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    CodeComponent Test_ProgCompr_Input
      Code Type = Py
      Begin Routine:
        current_time = datetime.now()
        start_of_stimuli = current_time- start_time
      End Routine:
        current_time = datetime.now()
        end_of_stimuli = current_time- start_time

        df_stimuli.loc[len(df_stimuli)] = [start_of_stimuli, end_of_stimuli, "ProgCompr_training_Input"]
    ImageComponent image_4
      image = material\ProgCompr\input_training.png
      startVal [time (s)] = 0.0
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  Routine ProgComprTestAnswers
    KeyboardComponent key_resp_15
      allowedKeys = 'a','s','d','f','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = material\ProgCompr\answers_training.png
      startVal [time (s)] = 0.0
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    CodeComponent ProgCompr_Test_A
      Code Type = Py
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      Begin Routine:
        current_time = datetime.now()
        start_of_stimuli = current_time- start_time
      End Routine:
        current_time = datetime.now()
        end_of_stimuli = current_time- start_time

        df_stimuli.loc[len(df_stimuli)] = [start_of_stimuli, end_of_stimuli, "ProgCompr_training_answer"]
        if  key_resp_15.keys is not None:
            answer = key_resp_15.keys[0]
            if answer == 's' and len(key_resp_15.keys)>1:
                answer = 'k'
            df_answer.loc[len(df_answer)] = ["ProgCompr_training", answer]
  Routine ProgComprQuestion
    ImageComponent ProgCompr_Question
      image [set every repeat] = $ProgrammingQuestion
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Py
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      Begin Routine:
        current_time = datetime.now()
        start_of_stimuli = current_time- start_time
        if use_devices==True:
            eeg_logger.refresh()
            eeg_logger.set_event(hash(str(ProgrammingQuestion))%1000000007)
            df_hash.loc[len(df_hash)] = [hash(str(ProgrammingQuestion))%1000000007, ProgrammingQuestion]
        thisExp.addData("ImagePath",ProgrammingQuestion)
      End Routine:
        current_time = datetime.now()
        end_of_stimuli = current_time- start_time

        df_stimuli.loc[len(df_stimuli)] = [start_of_stimuli, end_of_stimuli, Pr_question_name]
        if  Break_key4.keys is not None and len(Break_key4.keys)>0:
            if Break_key4.keys[0] == '0':
                Trials.finished=True
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press Space to go to input
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    KeyboardComponent Break_key4
      allowedKeys = '0'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine ProgComprInput
    CodeComponent code_8
      Code Type = Py
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      Begin Routine:
        current_time = datetime.now()
        start_of_stimuli = current_time- start_time
        if use_devices==True:
            eeg_logger.refresh()
            eeg_logger.set_event(hash(str(ProgrammingInput))%1000000007)
            df_hash.loc[len(df_hash)] = [hash(str(ProgrammingInput))%1000000007, ProgrammingInput]
        thisExp.addData("ImagePath",ProgrammingInput)
      End Routine:
        current_time = datetime.now()
        end_of_stimuli = current_time- start_time

        df_stimuli.loc[len(df_stimuli)] = [start_of_stimuli, end_of_stimuli, Pr_input_name]
        if  Break_key5.keys is not None and len(Break_key5.keys)>0:
            if Break_key5.keys[0] == '0':
                Trials.finished=True
    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press space to go to answers
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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    KeyboardComponent Break_key5
      allowedKeys = '0'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    ImageComponent image_7
      image [set every repeat] = $ProgrammingInput
      startVal [time (s)] = 0.0
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  Routine ProgComprAnswer
    KeyboardComponent key_resp_2
      allowedKeys = 'a', 's', 'd', 'f', 'space'
      correctAns = $Pr_correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      storeCorrect = True
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    CodeComponent code_9
      Code Type = Py
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      Begin Routine:
        current_time = datetime.now()
        start_of_stimuli = current_time- start_time

        if use_devices==True:
            eeg_logger.refresh()
            eeg_logger.set_event(hash(str(ProgrammingAnswer))%1000000007)
            df_hash.loc[len(df_hash)] = [hash(str(ProgrammingAnswer))%1000000007, ProgrammingAnswer]
        thisExp.addData("ImagePath",ProgrammingAnswer)
      End Routine:
        current_time = datetime.now()
        end_of_stimuli = current_time- start_time

        df_stimuli.loc[len(df_stimuli)] = [start_of_stimuli, end_of_stimuli, Pr_answer_name]
        answer = key_resp_2.keys[0]
        if answer == 's' and len(key_resp_2.keys)>1:
                answer = 'k'
        df_answer.loc[len(df_answer)] = [Pr_task_name, answer]
        if  Break_key6.keys is not None and len(Break_key6.keys)>0:
            if Break_key6.keys[0] == '0':
                Trials.finished=True
    ImageComponent image_3
      image [set every repeat] = $ProgrammingAnswer
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press space to skip
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    KeyboardComponent Break_key6
      allowedKeys = '0'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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Flow
  Routine Setup
  Routine start
  Routine ReadTest
  Routine ReadTestAnswer
  Routine ProbSolvTest
  Routine ProbSolvTestAnswers
  Routine MathTest
  Routine MathTestAnswer
  Routine ProgComprTest
  Routine ProgComprTestInput
  Routine ProgComprTestAnswers
  Routine start_2
  LoopInitiator Trials loopType="TrialHandler"
    conditionsFile = $"Questions"+participant+".xlsx"
    loopType = sequential
    nReps = 1
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    Routine Pause_2
    Routine Pause2_2
    Routine Continue
    Routine Question
    Routine Answers
    Routine Pause
    Routine Pause1_2
    Routine ProgComprQuestion
    Routine ProgComprInput
    Routine ProgComprAnswer
  LoopTerminator Trials
  Routine ThankYou
